OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Anthony Lin
0x9f5c4075 = WAP Training -- Train CSP
Comment
  Used to train the CSP based on
  the data taken from Acquisition
Comment
  ${file} is used to input a variable
  filename to be read
Comment
  ${generated_csp} is used to change
  the name of the csp input

  It will be available in csp_and_classifiers folder

Generic stream reader => #0
  Filename = ${file}
#0.Output stream 2 -> Channel Selector "1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16"
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 20
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "left trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "right trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#4.Output stream 2, Signal condition 1=#5, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${generated_csp}
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
