OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Used to train the LDA classifier based on the data and CSP
  taken from Acquisition and Train CSP
Comment
  ${file} is used to input a variable
  filename to be read
Comment
  ${generated_csp} is used to change
  the name of the csp input

  It should be available in csp_and_classifiers folder
Comment
  ${generated_classifier} is used to change
  the name of the classifier input

  It should be available in csp_and_classifiers folder

Generic stream reader => #0
  Filename = ${file}
#0.Output stream 2 -> Channel Selector "1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16"
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 20
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
#4.Output stream 1 -> Spatial Filter => #5
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${generated_csp}
Input signal=#5, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Input signal=#5, Input stimulations=#4.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #17
Stimulations=#4.Output stream 2, Features for class 1=#11, Features for class 2=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${generated_classifier}
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
