OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  Used to simulate an online mode
  given a training file and trained
  CSP and classifier
Comment
  ${file} is used to input a variable
  filename to be read
Comment
  ${generated_csp} is used to change
  the name of the csp input
Comment
  ${generated_classifier} is used to change
  the name of the classifier input
Comment
  ${confusion_matrix} is used to change
  the name of the csv file input=

Generic stream reader => #0
  Filename = X:/207BV/2018/04_Apr/04/1683/207BV_SSL_1683_BarTrn1_2018.04.04_15.47.08.ov
#0.Output stream 2 -> Channel Selector "1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16"
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Signal Decimation
  Decimation factor = 20
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/wap/Desktop/Nova pasta/csp_and_classifier/csp_1
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
#4.Output stream 2 -> Switch director => #11
  Lua Script = C:/Program Files (x86)/openvibe-2.1.0/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#11, Matrix=#10 -> Stream Switch => #12
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
Features=#12.Output[0] -> Classifier processor => #13
  Filename to load configuration from = C:/Users/wap/Desktop/Nova pasta/csp_and_classifier/classifier_with_rcsp_1_1
#4.Output stream 2 -> Stimulation Filter => #14
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Targets=#14, Classification results=#13.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_EndOfFile
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
